CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:16
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<WellID>[A-Za-z][0-9]{1,4})(?P<Field>[A-Za-z][0-9]{1,4})T0001Z000(?P<dye>[A-Za-z][0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Four channels are used in experiments: DAPI. 647 (ATF4 primary with Alexapluor 647), 594 (DsRed expressing Salmonella), and 488 (actin via phalloidin conjugated to Alexapluor 488). ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:4
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "C1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C4")
    Name to assign these images:ATF4
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:Flag_ansB
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Thresholding, segmentation, and size of DAPI signal to define nuclei']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):50,100
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:.8
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.000001,1.0
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    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:6|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notes:['Thresholding and segmentation of actin signal to define single cells. Note: The method used here is propagation. Propagation starts from an input object (here, the nuclear objects) and propagates to the periphery on the thresholded signal. In this case, this enables the separate identification of adjacent and even contiguous cells. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:4
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0024,1.0
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    Log transform before thresholding?:Yes
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
MeasureObjectSizeShape:[module_num:7|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
    Select object sets to measure:Cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:8|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notes:['Eliminate any nuclei that do not have a cytoplasm, occasionally occur during cell death/rounding']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
    Select the objects to filter:Cell
    Name the output objects:Cytoplasm_with_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:Yes
    Maximum value:60000
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
IdentifyTertiaryObjects:[module_num:9|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notes:['Using the cell secondary object minus the nuclei object, we identify the tertiary object: cytoplasm. ']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
    Select the larger identified objects:Cytoplasm_with_nuclei
    Select the smaller identified objects:Nuclei
    Name the tertiary objects to be identified:Cytoplasm
    Shrink smaller object prior to subtraction?:No

MeasureObjectIntensity:[module_num:10|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notes:['Measure ATF4  signal in each cell compartment']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
    Select images to measure:ATF4
    Select objects to measure:Cell, Cytoplasm, Cytoplasm_with_nuclei, Nuclei

MeasureObjectSizeShape:[module_num:11|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notes:['Measure the size of the cell. ']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
    Select object sets to measure:Cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

RescaleIntensity:[module_num:12|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notes:['Rescale image intensity (post-analysis) to visualize object segmetation (for overlaying cell or nuclear objects). Always check these to confirm pipeline is processing the objects as expected. ']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
    Select the input image:ATF4
    Name the output image:RescaleATF4
    Rescaling method:Choose specific values to be reset to a custom range
    Method to calculate the minimum intensity:Custom
    Method to calculate the maximum intensity:Custom
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    Intensity range for the input image:0.0,.01
    Intensity range for the output image:0.0,1
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
OverlayOutlines:[module_num:13|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notes:['Overlays ATF4 outlines objects and cell area over ATF4 (rescaled intensity)']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
    Display outlines on a blank image?:No
    Select image on which to display outlines:RescaleATF4
    Name the output image:OrigOverlay1
    Outline display mode:Color
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    How to outline:Inner
    Select outline color:white
    Select objects to display:Cell
    Select outline color:#A8FFA8
    Select objects to display:Nuclei

Tile:[module_num:14|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notes:['Generates tiled image of ATF4 stain (rescaled intensity) +/- analysis overlay']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
    Select an input image:RescaleATF4
    Name the output image:TiledImage
    Tile assembly method:Within cycles
    Final number of rows:1
    Final number of columns:2
    Image corner to begin tiling:top left
    Direction to begin tiling:row
    Use meander mode?:No
    Automatically calculate number of rows?:No
    Automatically calculate number of columns?:No
    Select an additional image to tile:OrigOverlay1

SaveImages:[module_num:15|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notes:['Saves analysis images with a useful name and location. Change location of default output file location through the "view output settings" option.']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
    Select the type of image to save:Image
    Select the image to save:TiledImage
    Select method for constructing file names:Sequential numbers
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    Enter file prefix:\g<WellID>_\g<Field>
    Number of digits:4
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    Saved file format:jpeg
    Output file location:Default Output Folder|
    Image bit depth:8-bit integer
    Overwrite existing files without warning?:No
    When to save:Every cycle
    Record the file and path information to the saved image?:No
    Create subfolders in the output folder?:No
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    Save with lossless compression?:No

ExportToSpreadsheet:[module_num:16|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notes:['Export data as a CSV file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cytoplasm|Location_CenterMassIntensity_Z_ATF4,Cytoplasm|Location_CenterMassIntensity_X_ATF4,Cytoplasm|Location_CenterMassIntensity_Y_ATF4,Cytoplasm|Location_MaxIntensity_Z_ATF4,Cytoplasm|Location_MaxIntensity_X_ATF4,Cytoplasm|Location_MaxIntensity_Y_ATF4,Cytoplasm|Location_Center_Y,Cytoplasm|Location_Center_X,Cytoplasm|Intensity_IntegratedIntensity_ATF4,Cytoplasm|Intensity_MeanIntensityEdge_ATF4,Cytoplasm|Intensity_MeanIntensity_ATF4,Cytoplasm|Intensity_UpperQuartileIntensity_ATF4,Cytoplasm|Intensity_StdIntensity_ATF4,Cytoplasm|Intensity_MinIntensityEdge_ATF4,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
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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