CellProfiler Pipeline: http://www.cellprofiler.org
Version:5
DateRevision:428
GitHash:
ModuleCount:12
HasImagePlaneDetails:False

Images:[module_num:1|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notes:['']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
    Filter images?:Custom
    Select the rule criteria:and (file does contain ".tif")

Metadata:[module_num:2|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notes:['']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
    Extract metadata?:Yes
    Metadata data type:Text
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    Extraction method count:1
    Metadata extraction method:Extract from file/folder names
    Metadata source:File name
    Regular expression to extract from file name:^(?P<WellID>[A-Za-z][0-9]{1,4})(?P<Field>[A-Za-z][0-9]{1,4})T0001Z000(?P<dye>[A-Za-z][0-9])
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    Extract metadata from:All images
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
NamesAndTypes:[module_num:3|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notes:['Three channels are used in experiments: 405 (DAPI), 594 (DsRed expressing Salmonella), and 488 (actin via phalloidin conjugated to Alexapluor 488). ']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
    Assign a name to:Images matching rules
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    Image set matching method:Order
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    Assignments count:3
    Single images count:0
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    Process as 3D?:No
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    Select the rule criteria:or (file does contain "C1")
    Name to assign these images:DAPI
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:or (file does contain "C2")
    Name to assign these images:Actin
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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    Select the rule criteria:and (file does contain "C3")
    Name to assign these images:DsRed
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    Select the image type:Grayscale image
    Set intensity range from:Image metadata
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
Groups:[module_num:4|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notes:['N/A']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
    Do you want to group your images?:No
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
IdentifyPrimaryObjects:[module_num:5|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notes:['Find bacteria using the 594 channel images']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
    Select the input image:DsRed
    Name the primary objects to be identified:DsRed_bacteria
    Typical diameter of objects, in pixel units (Min,Max):5,20
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
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    Use advanced settings?:No
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
IdentifyPrimaryObjects:[module_num:6|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notes:['Thresholding, segmentation, and size of DAPI signal to define nuclei using the 405 channel.']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
    Select the input image:DAPI
    Name the primary objects to be identified:Nuclei
    Typical diameter of objects, in pixel units (Min,Max):20,40
    Discard objects outside the diameter range?:Yes
    Discard objects touching the border of the image?:Yes
    Method to distinguish clumped objects:Shape
    Method to draw dividing lines between clumped objects:Shape
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    Speed up by using lower-resolution image to find local maxima?:Yes
    Fill holes in identified objects?:After both thresholding and declumping
    Automatically calculate size of smoothing filter for declumping?:Yes
    Automatically calculate minimum allowed distance between local maxima?:Yes
    Handling of objects if excessive number of objects identified:Continue
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    Use advanced settings?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:.8
    Threshold correction factor:1.1
    Lower and upper bounds on threshold:0.000001,1.0
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    Log transform before thresholding?:Yes
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
IdentifySecondaryObjects:[module_num:7|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notes:['Thresholding and segmentation of actin signal to define single cells. Note: The method used here is propagation. Propagation starts from an input object (here, the nuclear objects) and propagates to the periphery on the thresholded signal. In this case, this enables the separate identification of adjacent and even contiguous cells. ']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
    Select the input objects:Nuclei
    Name the objects to be identified:Cell
    Select the method to identify the secondary objects:Propagation
    Select the input image:Actin
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    Regularization factor:0.05
    Discard secondary objects touching the border of the image?:No
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    Fill holes in identified objects?:Yes
    Threshold setting version:12
    Threshold strategy:Global
    Thresholding method:Minimum Cross-Entropy
    Threshold smoothing scale:4
    Threshold correction factor:1
    Lower and upper bounds on threshold:0.0024,1.0
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    Log transform before thresholding?:Yes
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
MeasureObjectSizeShape:[module_num:8|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notes:['Measuing signal from the phalloidin 488']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
    Select object sets to measure:Cell
    Calculate the Zernike features?:No
    Calculate the advanced features?:No

FilterObjects:[module_num:9|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notes:['Eliminate any nuclei that do not have a cytoplasm as measured in the previous step, occasionally occur during cell death/rounding']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
    Select the objects to filter:Cell
    Name the output objects:Cell_with_nuclei
    Select the filtering mode:Measurements
    Select the filtering method:Limits
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    Measurement count:1
    Additional object count:0
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    Keep removed objects as a separate set?:No
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    Select the measurement to filter by:AreaShape_Area
    Filter using a minimum measurement value?:Yes
    Minimum value:500
    Filter using a maximum measurement value?:Yes
    Maximum value:60000
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
MeasureObjectOverlap:[module_num:10|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notes:['Test if the bacteria are found inside the area found by Cell and with a nuclei']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
    Select the objects to be used as the ground truth basis for calculating the amount of overlap:Cell_with_nuclei
    Select the objects to be tested for overlap against the ground truth:DsRed_bacteria
    Calculate earth mover's distance?:No
    Maximum # of points:250
    Point selection method:K Means
    Maximum distance:250
    Penalize missing pixels:No

RelateObjects:[module_num:11|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notes:['Associate bacteria cell to be able to count # of bacteri per cell']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
    Parent objects:Cell_with_nuclei
    Child objects:DsRed_bacteria
    Calculate child-parent distances?:None
    Calculate per-parent means for all child measurements?:No
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    Do you want to save the children with parents as a new object set?:Yes
    Name the output object:Infected_cell
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
ExportToSpreadsheet:[module_num:12|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notes:['Export data as a CSV file.']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
    Select the column delimiter:Comma (",")
    Add image metadata columns to your object data file?:Yes
    Add image file and folder names to your object data file?:No
    Select the measurements to export:Yes
    Calculate the per-image mean values for object measurements?:Yes
    Calculate the per-image median values for object measurements?:No
    Calculate the per-image standard deviation values for object measurements?:No
    Output file location:Default Output Folder|
    Create a GenePattern GCT file?:No
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    Export all measurement types?:Yes
    Press button to select measurements:Cell_with_nuclei|Location_Center_Z,Cell_with_nuclei|Location_Center_X,Cell_with_nuclei|Location_Center_Y,Cell_with_nuclei|Children_DsRed_bacteria_Count,Cell_with_nuclei|Number_Object_Number,Cell_with_nuclei|Parent_Cell,Infected_cell|Location_Center_Z,Infected_cell|Location_Center_X,Infected_cell|Location_Center_Y,Infected_cell|Parent_DsRed_bacteria,Infected_cell|Number_Object_Number
    Representation of Nan/Inf:NaN
    Add a prefix to file names?:Yes
    Filename prefix:
    Overwrite existing files without warning?:No
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